#pragma once
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "BioTek Gen5\\BioTekGen5COM.hsl"
#include "SkeletonRun\\Submethods\\Common\\CMDTools.hs_"
#include "HSLStrLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "SkeletonRun\\Submethods\\Common\\DeviceDefinitions.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace BIOTEKGEN5 {
  variable tl_blnSimulation;
  function Door( variable i_blnDoorOpen ) variable ;
  function ExperimentClose( variable i_blnCloseExperiment ) variable ;
  function ExperimentOpen( variable i_blnNewExperiment, variable i_strProtocolPathName, variable i_strExperimentPathName ) variable ;
  function ExperimentSave( variable i_strFilePath, variable i_blnCloseExperiment ) variable ;
  function GetInformations( variable i_intInformation ) variable ;
  function ImportSampleIDs( variable i_strFilePath ) variable ;
  function Initialize( variable i_intTraceLevel, variable i_blnSimulation ) void ;
  function PlateAdd( variable i_strPlateID, variable i_strPlateBarcode ) variable ;
  function PlateDataExport( variable i_strPath, variable i_intExportType ) variable ;
  function PlateDelete(  ) variable ;
  function PlateSelect( variable i_intIndex ) variable ;
  function PlateSet( variable g_blnSimulationMode, variable i_strPlateID, variable i_strPlateBarcode, variable i_strLayoutXml ) variable ;
  function PrintReport( variable g_blnSimulationMode ) variable ;
  function ReadPlate( variable i_blnRotatePlate, variable i_blnWaitForReadFinish, variable i_blnResumeReading ) void ;
  function Terminate(  ) variable ;
  private function _CheckIfFunctionSucceeds( variable i_blnError ) variable ;
  private function _ReInitialize( variable i_intTraceLevel ) variable ;
  function _InitLibrary() {
    KILLTASK::_InitLibrary();
  }
  function _ExitLibrary() {
    KILLTASK::_ExitLibrary();
  }

  function Initialize( variable i_intTraceLevel, variable i_blnSimulation ) void {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    private variable l_blnSuccessful;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    tl_blnSimulation = i_blnSimulation;
    strErrorMessage = "";
    blnReturnValue = BioTekGen5COM::SetTraceLevel(i_intTraceLevel);
    BioTekGen5COM::OverrideSimulation(tl_blnSimulation);
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      {
        while (1 == 1)
        {
          KILLTASK::KillTask(Translate("Gen5.exe"));
          if (DEVICES::READER::g_intConnectReaderNode == 0)
          {
            {
              while (1 == 1)
              {
                MECC::TraceComment(Translate("connect reader by serial"));
                blnReturnValue = BioTekGen5COM::ConnectSerial(BioTekGen5COM::BioTekReaderTypes::SYNERGY_HT, DEVICES::READER::g_intReaderCOMPort, DEVICES::READER::g_intBaudeRate, g_intReaderID);
                if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
                {
                  TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
                }
                l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
                if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
                {
                  break;
                }
              }
            }
          }
          else
          {
            {
              while (1 == 1)
              {
                MECC::TraceComment(Translate("connect reader by usb"));
                blnReturnValue = BioTekGen5COM::ConnectUSB(BioTekGen5COM::BioTekReaderTypes::EPOCH, Translate(""), g_intReaderID);
                if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
                {
                  TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
                }
                l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
                if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
                {
                  break;
                }
              }
            }
          }
          blnReturnValue = BioTekGen5COM::CarrierIn(g_intReaderID);
          if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
          {
            TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          }
          l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
          if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
          {
            break;
          }
        }
      }
    }
  }

  function Terminate(  ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::Disconnect(g_intReaderID);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ReadPlate( variable i_blnRotatePlate, variable i_blnWaitForReadFinish, variable i_blnResumeReading ) void {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strRotation;
    private variable strErrorMessage;
    private variable l_blnSuccessful;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    strRotation = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      {
        while (1 == 1)
        {
          {
            while (1 == 1)
            {
              blnReturnValue = BioTekGen5COM::ValidateProcedure(g_intReaderID, i_blnRotatePlate, strRotation);
              if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
              {
                TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
              }
              l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
              if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
              {
                break;
              }
            }
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Valid: ", strRotation);
          if (i_blnResumeReading == ASWGLOBAL::BOOL::TRUE)
          {
            blnReturnValue = BioTekGen5COM::ResumeReadEx(g_intReaderID, i_blnRotatePlate);
            MECC::TraceComment(Translate("************************************************ Reading ************************************************"));
            if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
            {
              TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
            }
            l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
            if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
            {
              break;
            }
          }
          else
          {
            if (i_blnWaitForReadFinish == ASWGLOBAL::BOOL::FALSE)
            {
              blnReturnValue = BioTekGen5COM::StartReadPlateEx(g_intReaderID, i_blnRotatePlate);
              MECC::TraceComment(Translate("************************************************ Reading ************************************************"));
              if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
              {
                TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
              }
              l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
              if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
              {
                break;
              }
            }
            else
            {
              blnReturnValue = BioTekGen5COM::ReadPlateAndWaitEx(g_intReaderID, i_blnRotatePlate);
              MECC::TraceComment(Translate("************************************************ Reading ************************************************"));
              if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
              {
                TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
              }
              l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
              if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
              {
                break;
              }
            }
          }
        }
      }
    }
  }

  function GetInformations( variable i_intInformation ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strVersion;
    private variable intStatus;
    private variable strAppPath;
    private variable strPlateID;
    private variable strPlateBarcode;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    strVersion = "";
    strAppPath = "";
    strPlateID = "";
    strPlateBarcode = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_intInformation == 1)
      {
        blnReturnValue = BioTekGen5COM::GetApplicationInfo(g_intReaderID, strVersion, strAppPath);
        TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, " Applikation Version ", strVersion, " Applikation path ", strAppPath);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (i_intInformation == 2)
      {
        blnReturnValue = BioTekGen5COM::GetReadStatus(g_intReaderID, intStatus);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " 0 : Read not started 1 : Read in progress 2 : Read aborted 3 : Read paused 4 : Read error 5 : Read completed ", intStatus);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (i_intInformation == 3)
      {
        blnReturnValue = BioTekGen5COM::GetPlateProperties(g_intReaderID, strPlateID, strPlateBarcode);
        TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, " ID of the current Plate ", strPlateID, " Barcode of the current Plate ", strPlateBarcode);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function Door( variable i_blnDoorOpen ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    private variable l_blnSuccessful;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_blnDoorOpen == ASWGLOBAL::BOOL::TRUE)
      {
        {
          while (1 == 1)
          {
            blnReturnValue = BioTekGen5COM::CarrierOut(g_intReaderID);
            if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
            {
              TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
            }
            l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
            if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
            {
              break;
            }
          }
        }
      }
      else
      {
        {
          while (1 == 1)
          {
            blnReturnValue = BioTekGen5COM::CarrierIn(g_intReaderID);
            if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
            {
              TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
            }
            l_blnSuccessful = _CheckIfFunctionSucceeds(blnReturnValue);
            if (l_blnSuccessful == ASWGLOBAL::BOOL::TRUE)
            {
              break;
            }
          }
        }
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ExperimentSave( variable i_strFilePath, variable i_blnCloseExperiment ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_strFilePath == "")
      {
        blnReturnValue = BioTekGen5COM::SaveExperiment(g_intReaderID);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        blnReturnValue = BioTekGen5COM::SaveExperimentAs(g_intReaderID, i_strFilePath);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if (i_blnCloseExperiment == ASWGLOBAL::BOOL::TRUE)
      {
        blnReturnValue = BioTekGen5COM::CloseExperiment(g_intReaderID);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PlateAdd( variable i_strPlateID, variable i_strPlateBarcode ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::AddPlate(g_intReaderID, i_strPlateID, i_strPlateBarcode);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ExperimentClose( variable i_blnCloseExperiment ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::CloseExperiment(g_intReaderID);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ExperimentOpen( variable i_blnNewExperiment, variable i_strProtocolPathName, variable i_strExperimentPathName ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      if (i_blnNewExperiment == ASWGLOBAL::BOOL::TRUE)
      {
        blnReturnValue = BioTekGen5COM::NewExperiment(g_intReaderID, i_strProtocolPathName);
        if (blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        blnReturnValue = BioTekGen5COM::OpenExperiment(g_intReaderID, i_strExperimentPathName);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PlateDelete(  ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::DeletePlate(g_intReaderID);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PlateSelect( variable i_intIndex ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::SelectPlate(g_intReaderID, i_intIndex);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PlateSet( variable g_blnSimulationMode, variable i_strPlateID, variable i_strPlateBarcode, variable i_strLayoutXml ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::SetPlateProperties(g_intReaderID, i_strPlateID, i_strPlateBarcode);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
      blnReturnValue = BioTekGen5COM::SetPlateLayout(g_intReaderID, i_strLayoutXml);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ImportSampleIDs( variable i_strFilePath ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::ImportSampleIDs(g_intReaderID, i_strFilePath);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PrintReport( variable g_blnSimulationMode ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::PrintReport(g_intReaderID);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function PlateDataExport( variable i_strPath, variable i_intExportType ) variable {
    private variable strMethodName;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    strErrorMessage = "";
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      blnReturnValue = BioTekGen5COM::ExportPlateData(g_intReaderID, i_strPath, i_intExportType);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _CheckIfFunctionSucceeds( variable i_blnError ) variable {
    private dialog customDialog_1;
    private variable l_strErrorMessage;
    private variable l_intDialogReturn;
    private variable l_blnError;
    private variable intErrorCode;
    if (i_blnError == 1)
    {
      l_blnError = BioTekGen5COM::GetLastError(l_strErrorMessage);
      if (l_blnError == 1)
      {
        l_strErrorMessage = Translate("unknown error");
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", l_strErrorMessage);
      BioTekGen5COM::GetLastReaderError(g_intReaderID, intErrorCode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", intErrorCode);
      l_strErrorMessage = StrConcat12(Translate("("), intErrorCode, Translate(") "), l_strErrorMessage, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "textBlock2.Text", l_strErrorMessage );
      customDialog_1.ShowCustomDialog();
      l_intDialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (l_intDialogReturn == 3)
      {
        abort;
      }
      else
      {
        if (l_intDialogReturn == 2)
        {
          return (ASWGLOBAL::BOOL::TRUE);
        }
        else
        {
          _ReInitialize(2);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
    }
    else
    {
      return (ASWGLOBAL::BOOL::TRUE);
    }
  }

  private function _ReInitialize( variable i_intTraceLevel ) variable {
    private variable strMethodName;
    private variable intErrorCode;
    private variable strFunctionName;
    private variable blnReturnValue;
    private variable strErrorMessage;
    strFunctionName = GetFunctionName();
    strMethodName = GetMethodFileName();
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    strErrorMessage = "";
    blnReturnValue = BioTekGen5COM::SetTraceLevel(i_intTraceLevel);
    BioTekGen5COM::OverrideSimulation(tl_blnSimulation);
    if (tl_blnSimulation == ASWGLOBAL::BOOL::FALSE)
    {
      KILLTASK::KillTask(Translate("Gen5.exe"));
      if (DEVICES::READER::g_intConnectReaderNode == 0)
      {
        MECC::TraceComment(Translate("connect reader by serial"));
        blnReturnValue = BioTekGen5COM::ConnectSerial(BioTekGen5COM::BioTekReaderTypes::EPOCH, DEVICES::READER::g_intReaderCOMPort, DEVICES::READER::g_intBaudeRate, g_intReaderID);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      else
      {
        MECC::TraceComment(Translate("connect reader by usb"));
        blnReturnValue = BioTekGen5COM::ConnectUSB(BioTekGen5COM::BioTekReaderTypes::EPOCH, Translate(""), g_intReaderID);
        if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
        {
          TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
          BioTekGen5COM::GetLastError(strErrorMessage);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
          BioTekGen5COM::GetLastReaderError(g_intReaderID, intErrorCode);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", intErrorCode);
          return (ASWGLOBAL::BOOL::FALSE);
        }
      }
      if(0){
        blnReturnValue = BioTekGen5COM::CarrierOut(g_intReaderID);
      }
      blnReturnValue = BioTekGen5COM::CarrierIn(g_intReaderID);
      if (blnReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strMethodName, "Biotek reader error");
        BioTekGen5COM::GetLastError(strErrorMessage);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, " Error ", strErrorMessage);
        return (ASWGLOBAL::BOOL::FALSE);
      }
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
