 namespace _Method { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "SchedulingDev\\HSLAppsLib.hsl" }
 namespace _Method { #include "C:\\Users\\Roboter\\src\\pyhamilton\\pyhamilton\\star-oem\\BioTekGen5\\BioTekGen5.hs_" }
#include "STAR_OEM_Test.res"
variable loopCounterMain;
variable msg;
object objJSONFromServer;
variable commandFromServer;
variable initializeAlways;
variable o_stepReturn;
object objJSONToServer;
sequence seq;
variable tipSequence;
variable sequenceCounting;
variable channelVariable;
variable channelUse;
variable labwarePositions;
variable aspirateSequence;
variable v;
variable arrayOfVolumes[];
variable liquidClass;
variable aspirateMode;
variable capacitiveLLD;
variable pressureLLD;
variable liquidFollowing;
variable submergeDepth;
variable liquidHeight;
variable maxLLdDifference;
variable mixCycles;
variable mixPosition;
variable mixVolume;
variable airTransportRetractDist;
variable touchOff;
variable aspPosAboveTouch;
variable o_liquidLevels_mm[];
variable o_liquidLevels_mL[];
variable o_stepReturn2;
variable o_stepReturn3;
variable dispenseMode;
variable dispenseSequence;
variable dispPositionAboveTouch;
variable zMoveAfterStep;
variable sideTouch;
variable wasteSequence;
variable useDefaultWaste;
variable o_stepReturn4;
variable lidSequence;
variable plateSequence;
variable toolSequence;
variable transportMode;
variable widthBefore;
variable gripHeight;
variable gripWidth;
variable gripSpeed;
variable gripperToolChannel;
variable checkPlate;
variable zSpeed;
variable gripForce;
sequence lidSeq;
sequence toolSeq;
variable xAcceleration;
variable platePressOnDistance;
variable ejectToolWhenFinish;
object objHttp;
variable blnReturn;
variable blnSuccess;
variable usedNode;
variable deviceNumber;
variable action;
variable sampleInterval;
variable shakingToleranceRange;
variable id;
variable monitorResult;
variable firmwareVersion;
variable serialNumber;
variable command;
variable parameter;
variable plateLock;
variable shakingAccRamp;
variable shakingDirection;
variable simulate;
variable startTimeout;
variable toleranceRange;
variable securityRange;
variable intTrace;
variable shakingSpeed;
variable shakingTime;
variable temperature;
variable waitForTempReached;
variable inverseGrip;
variable liftUpHeight;
variable retractDistance;
variable tolerance;
variable labwareOrientation;
variable movementType;
variable collisionControl;
variable gripMode;
variable showCollisionCheckDialog;
//global device HxFan ("STAR_OEM_Test.lay", "HxFan", hslTrue);
variable FirmwareCommand;
variable FirmwareParameter;
variable CommandListElement;
variable CommandListLength;
object FirmwareCmdDict;
variable yDisplacement;
variable zDisplacement;
variable xDisplacement;
variable yOrigin;
variable xOrigin;
variable zOrigin;
variable inputSequence;
variable seqFirstPosition;
variable seqSecondPosition;
global device ML_STAR ("STAR_OEM_Test.lay", "ML_STAR", hslTrue);
variable plateReader_doorAction;
variable plateReader_experimentPath;
variable plateReader_exportPath;
global device HxGen5 ("STAR_OEM_Test.lay", "HxGen5", hslTrue);
variable plateReader_readStatus;
variable o_errorCode;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    STAR_OEM_TOOLKIT::_InitLibrary();
    BIOTEKGEN5::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnReturn = HSLHttp::Initialize(objHttp);
    if (blnReturn != blnSuccess)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("HTTP Test Method"), Translate(" - "), Translate("Error Initializing HTTP Library"), Translate(""));
      return;
    }
    SendTextMessageToServer(Translate("Hi, Iï¿½m a VENUS method."));
    {
      loopCounterMain = 0;
      while (1 == 1)
      {
        loopCounterMain = loopCounterMain + 1;
        commandFromServer = Translate("");
        o_stepReturn = Translate("");
        o_stepReturn2 = Translate("");
        o_stepReturn3 = Translate("");
        o_stepReturn4 = Translate("");
        msg = waitForGUItoContinue();
        Trace("JSON received from Server:", msg);
        HSLJsonLib::Create(objJSONFromServer);
        HSLJsonLib::ParseJson(objJSONFromServer, msg);
        HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("command"), commandFromServer);
        HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("id"), id);
        if (commandFromServer == "initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("initializeAlways"), initializeAlways);
          STAR_OEM_TOOLKIT::Initialize(ML_STAR, initializeAlways, o_stepReturn);
          TrcTrace(Translate("Init step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "channelTipPickUp")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("tipSequence"), tipSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          if (tipSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, tipSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_TipPickUp(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, o_stepReturn);
          TrcTrace(Translate("Tip pick up step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "channelAspirate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("aspirateSequence"), aspirateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("aspirateMode"), aspirateMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("pressureLLD"), pressureLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          Trace("Bookstart");
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          Trace("Bookend");
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          JSON_GetFloatValue(Translate("maxLLdDifference"), maxLLdDifference);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          JSON_GetFloatValue(Translate("aspPosAboveTouch"), aspPosAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          if (aspirateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, aspirateSequence, seq);
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          STAR_OEM_TOOLKIT::Channels_1ml_Aspirate(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, aspirateMode, capacitiveLLD, pressureLLD, liquidFollowing, submergeDepth, liquidHeight, maxLLdDifference, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, aspPosAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "channelDispense")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("dispenseSequence"), dispenseSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("dispenseMode"), dispenseMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          JSON_GetFloatValue(Translate("dispPositionAboveTouch"), dispPositionAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("zMoveAfterStep"), zMoveAfterStep);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sideTouch"), sideTouch);
          if (dispenseSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, dispenseSequence, seq);
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          STAR_OEM_TOOLKIT::Channels_1mL_Dispense(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, dispenseMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, zMoveAfterStep, sideTouch, dispPositionAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "channelTipEject")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("wasteSequence"), wasteSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("useDefaultWaste"), useDefaultWaste);
          if (useDefaultWaste == 0)
          {
            if (wasteSequence == "")
            {
              HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
            else
            {
              DevGetSequenceRef(ML_STAR, wasteSequence, seq);
            }
          }
          else
          {
            SeqCopySequence(seq, ML_STAR.Waste);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_TipEject(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, useDefaultWaste, o_stepReturn);
          TrcTrace(Translate("Tip eject step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripGet")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripForce"), gripForce);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripperToolChannel"), gripperToolChannel);
          JSON_GetFloatValue(Translate("gripWidth"), gripWidth);
          JSON_GetFloatValue(Translate("gripHeight"), gripHeight);
          JSON_GetFloatValue(Translate("widthBefore"), widthBefore);
          JSON_GetFloatValue(Translate("gripSpeed"), gripSpeed);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
            TrcTraceSequence(seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Get(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, gripForce, gripperToolChannel, gripWidth, gripHeight, widthBefore, gripSpeed, zSpeed, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Get - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripMove")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
              TrcTraceSequence(seq);
              TrcTrace(Translate("wrong"), Translate("nowwrongere"));
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
            TrcTraceSequence(seq);
            TrcTrace(Translate("here"), Translate("now here"));
          }
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          xOrigin = xDisplacement * -1;
          yOrigin = yDisplacement * -1;
          zOrigin = zDisplacement * -1;
          APPSLIB::MoveSequence(ML_STAR, seq, xOrigin, yOrigin, zOrigin);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Move(ML_STAR, seq, xAcceleration, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Move - step return:"), o_stepReturn);
          TrcTrace(Translate("here here"), Translate("nohhere"));
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "gripPlace")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ejectToolWhenFinish"), ejectToolWhenFinish);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          JSON_GetFloatValue(Translate("platePressOnDistance"), platePressOnDistance);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Place(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, ejectToolWhenFinish, zSpeed, platePressOnDistance, xAcceleration, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Place - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapGet")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("movementType"), movementType);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("labwareOrientation"), labwareOrientation);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripForce"), gripForce);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("inverseGrip"), inverseGrip);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripMode"), gripMode);
          JSON_GetFloatValue(Translate("retractDistance"), retractDistance);
          JSON_GetFloatValue(Translate("liftUpHeight"), liftUpHeight);
          JSON_GetFloatValue(Translate("gripWidth"), gripWidth);
          JSON_GetFloatValue(Translate("tolerance"), tolerance);
          JSON_GetFloatValue(Translate("gripHeight"), gripHeight);
          JSON_GetFloatValue(Translate("widthBefore"), widthBefore);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, lidSeq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Get(ML_STAR, seq, lidSeq, sequenceCounting, movementType, transportMode, labwareOrientation, gripForce, inverseGrip, collisionControl, gripMode, retractDistance, liftUpHeight, gripWidth, tolerance, gripHeight, widthBefore, o_stepReturn);
          TrcTrace(Translate("iSWAP Get - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapMove")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripMode"), gripMode);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Move(ML_STAR, seq, collisionControl, gripMode, o_stepReturn);
          TrcTrace(Translate("iSWAP Move - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapPlace")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("movementType"), movementType);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("labwareOrientation"), labwareOrientation);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("collisionControl"), collisionControl);
          JSON_GetFloatValue(Translate("retractDistance"), retractDistance);
          JSON_GetFloatValue(Translate("liftUpHeight"), liftUpHeight);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          STAR_OEM_TOOLKIT::iSWAP_Place(ML_STAR, seq, lidSeq, sequenceCounting, movementType, transportMode, labwareOrientation, collisionControl, retractDistance, liftUpHeight, o_stepReturn);
          TrcTrace(Translate("iSWAP Place - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapPark")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("showCollisionCheckDialog"), showCollisionCheckDialog);
          STAR_OEM_TOOLKIT::iSWAP_Park(ML_STAR, showCollisionCheckDialog, o_stepReturn);
          TrcTrace(Translate("iSWAP Park - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "iSwapGetFirst")
        {
          STAR_OEM_TOOLKIT::iSWAP_Park(ML_STAR, showCollisionCheckDialog, o_stepReturn);
          ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
          TrcTrace(Translate("iSWAP Park - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "FirmwareCommand")
        {
          CommandListLength = HSLJsonLib::GetArrayLength(objJSONFromServer, Translate("FirmwareCommandList"));
          {
            for(CommandListElement = 0; CommandListElement < CommandListLength;)
            {
              CommandListElement = CommandListElement + 1;
              HSLJsonLib::GetJsonArrayElement(objJSONFromServer, Translate("FirmwareCommandList"), CommandListElement, FirmwareCmdDict);
              HSLJsonLib::GetStringProperty(FirmwareCmdDict, Translate("FirmwareCommand"), FirmwareCommand);
              HSLJsonLib::GetStringProperty(FirmwareCmdDict, Translate("FirmwareParameter"), FirmwareParameter);
              STAR_OEM_TOOLKIT::SendFirmwareCommand(FirmwareCommand, ML_STAR, FirmwareParameter, o_stepReturn);
              TrcTrace(Translate("Firmware Command Step Return:"), o_stepReturn);
              SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
            }
          }
        }
        if (commandFromServer == "moveSequence")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("inputSequence"), inputSequence);
          JSON_GetFloatValue(Translate("xDisplacement"), xDisplacement);
          JSON_GetFloatValue(Translate("yDisplacement"), yDisplacement);
          JSON_GetFloatValue(Translate("zDisplacement"), zDisplacement);
          DevGetSequenceRef(ML_STAR, inputSequence, seq);
          seqFirstPosition = SeqGetPositionId(seq);
          APPSLIB::MoveSequence(ML_STAR, seq, xDisplacement, yDisplacement, zDisplacement);
          o_stepReturn = Translate("1");
          seqSecondPosition = SeqGetPositionId(seq);
          TrcTrace(seqFirstPosition, seqSecondPosition);
          TrcTrace(Translate("First check"), Translate("Second check"));
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_BeginMonitoring")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingToleranceRange"), shakingToleranceRange);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sampleInterval"), sampleInterval);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("action"), action);
          o_stepReturn = 1;
          onerror goto errLabel_1 ;
          err.Clear();
          HSLHamHeaterShaker::BeginMonitoring(deviceNumber, shakingToleranceRange, sampleInterval, action);
          errLabel_1 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create STAR device step return:"), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_CreateStarDevice")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("usedNode"), usedNode);
          onerror goto errLabel_2 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, usedNode, deviceNumber);
          o_stepReturn = 1;
          errLabel_2 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create STAR device step return:"), o_stepReturn);
          TrcTrace(Translate("HHS create STAR device step return2 (device number):"), deviceNumber);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_CreateUSBDevice")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("usedNode"), usedNode);
          onerror goto errLabel_3 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::CreateUsbDevice(usedNode, deviceNumber);
          o_stepReturn = 1;
          errLabel_3 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS create USB device step return:"), o_stepReturn);
          TrcTrace(Translate("HHS create USB device step return2 (device number):"), deviceNumber);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, deviceNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_EndMonitoring")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_4 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::EndMonitoring(deviceNumber, monitorResult);
          o_stepReturn = 1;
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          TrcTrace(Translate("HHS End Monitoring step return:"), o_stepReturn);
          SendHHSReturnToServer(commandFromServer, o_stepReturn, monitorResult, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetFirmwareVersion")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_5 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetFirmwareVersion(deviceNumber, firmwareVersion);
          errLabel_5 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, firmwareVersion, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetSerialNumber")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_6 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetSerialNumber(deviceNumber, serialNumber);
          errLabel_6 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, serialNumber, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetShakerParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_7 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetShakerParameter(deviceNumber, o_stepReturn2, o_stepReturn3);
          errLabel_7 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "HHS_GetShakerSpeed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_8 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::GetShakerSpeed(deviceNumber, o_stepReturn2);
          errLabel_8 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""), id);
        }
        if (commandFromServer == "HHS_GetTempParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_9 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::GetTempParameter(deviceNumber, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          errLabel_9 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, id);
        }
        if (commandFromServer == "HHS_GetTemperature")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_10 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::GetTemperature(deviceNumber, o_stepReturn2);
          errLabel_10 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_GetTemperatureState")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_11 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::GetTemperatureState(deviceNumber, o_stepReturn2);
          errLabel_11 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SendFirmwareCommand")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("command"), command);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("parameter"), parameter);
          onerror goto errLabel_12 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::SendFirmwareCommand(deviceNumber, command, parameter);
          errLabel_12 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetPlateLock")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("plateLock"), plateLock);
          onerror goto errLabel_13 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::SetPlateLock(deviceNumber, plateLock);
          errLabel_13 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetShakerParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingDirection"), shakingDirection);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingAccRamp"), shakingAccRamp);
          onerror goto errLabel_14 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetShakerParameter(deviceNumber, shakingDirection, shakingAccRamp);
          errLabel_14 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetSimulation")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("simulate"), simulate);
          onerror goto errLabel_15 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetSimulation(simulate);
          errLabel_15 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetTempParameter")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("startTimeout"), startTimeout);
          HSLJsonLib::GetFloatProperty(objJSONFromServer, Translate("toleranceRange"), toleranceRange);
          HSLJsonLib::GetFloatProperty(objJSONFromServer, Translate("securityRange"), securityRange);
          onerror goto errLabel_16 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetTempParameter(deviceNumber, startTimeout, toleranceRange, securityRange);
          errLabel_16 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_SetUSBTrace")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("trace"), intTrace);
          onerror goto errLabel_17 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::SetUSBTrace(intTrace);
          errLabel_17 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartAllShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          onerror goto errLabel_18 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::StartAllShaker(shakingSpeed);
          o_stepReturn = 1;
          errLabel_18 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartAllShakerTimed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingTime"), shakingTime);
          onerror goto errLabel_19 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::StartAllShakerTimed(shakingSpeed, shakingTime);
          errLabel_19 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          onerror goto errLabel_20 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::StartShaker(deviceNumber, shakingSpeed);
          o_stepReturn = 1;
          errLabel_20 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartShakerTimed")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingSpeed"), shakingSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("shakingTime"), shakingTime);
          onerror goto errLabel_21 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::StartShakerTimed(deviceNumber, shakingSpeed, shakingTime);
          errLabel_21 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StartTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("temperature"), temperature);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("waitForTempReached"), waitForTempReached);
          onerror goto errLabel_22 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::StartTempCtrl(deviceNumber, temperature, waitForTempReached);
          o_stepReturn = 1;
          errLabel_22 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopAllShaker")
        {
          onerror goto errLabel_23 ;
          err.Clear();
          o_stepReturn = HSLHamHeaterShaker::StopAllShaker();
          o_stepReturn = 1;
          errLabel_23 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_24 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::StopShaker(deviceNumber);
          errLabel_24 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_StopTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_25 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::StopTempCtrl(deviceNumber);
          errLabel_25 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_Terminate")
        {
          onerror goto errLabel_26 ;
          err.Clear();
          o_stepReturn = 1;
          HSLHamHeaterShaker::Terminate();
          errLabel_26 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_WaitForShaker")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_27 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::WaitForShaker(deviceNumber);
          errLabel_27 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "HHS_WaitForTempCtrl")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("deviceNumber"), deviceNumber);
          onerror goto errLabel_28 ;
          err.Clear();
          o_stepReturn = 1;
          o_stepReturn = HSLHamHeaterShaker::WaitForTempCtrl(deviceNumber);
          errLabel_28 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_stepReturn = 0;
          }   /* end if from skip handler if no error */
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "BioTekGen5_Initialize")
        {
          onerror goto errLabel_29 ;
          err.Clear();
          {
            	HxGen5._14301393_4EDB_4D93_8CF8_B140A8D41258("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"); // Configure
          }
          {
            	HxGen5._D8B7B31B_B786_4BCE_B07B_73EF0C1331FD("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"); // Connect
          }
          o_stepReturn = 1;
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
          errLabel_29 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_errorCode = 200;
            SendErrorResponseBackToServer(Translate("BioTekGen5::initialize"), o_errorCode, id);
          }   /* end if from skip handler if no error */
        }
        if (commandFromServer == "BioTekGen5_Door")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("DoorAction"), plateReader_doorAction);
          if (plateReader_doorAction == "Open")
          {
            {
              	HxGen5._32329F7E_01A2_4F5E_9B4D_8AE1784121B7("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"); // CarrierOut
            }
          }
          else
          {
            {
              	HxGen5._E7B59323_6EC3_4628_90DF_D4797A4E76F3("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"); // CarrierIn
            }
          }
          o_stepReturn = 1;
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "BioTekGen5_ExperimentOpen")
        {
          o_stepReturn = 1;
          SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
        }
        if (commandFromServer == "BioTekGen5_ReadPlate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ExperimentPath"), plateReader_experimentPath);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ExportPath"), plateReader_exportPath);
          onerror goto errLabel_30 ;
          err.Clear();
          {
            	HxGen5._AF1E1572_E144_4AA6_B6D0_A5BADD157064("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"); // OpenExperiment
          }
          {
            	HxGen5._25637CE1_C9F1_4F76_AD0F_17A5616CC64C("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"); // AddPlate
          }
          {
            	HxGen5._D78AD4C9_7E61_40BB_97E5_EDC875741C83("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"); // ReadPlateAndWait
          }
          {
            	plateReader_readStatus = HxGen5._70E6792D_5F93_41C0_9499_FFE488CA953C("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"); // GetReadStatus
          }
          TrcTrace(Translate("BioTekGen5 ReadPlate: Read Status = "), plateReader_readStatus);
          if (plateReader_readStatus == 5)
          {
            {
              	HxGen5._6A818AE3_ABBE_4667_BD33_9AEF0F7CDAE6("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"); // ExportPlateData
            }
            {
              	HxGen5._161408CC_897C_4D21_9977_B9BC9F326A32("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"); // SaveExperiment
            }
            {
              	HxGen5._FF939931_BE46_47CD_B5B6_6ED519680CCE("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"); // CloseExperiment
            }
            o_stepReturn = 1;
            SendHHSReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""), id);
          }
          else
          {
            o_errorCode = 200;
            SendErrorResponseBackToServer(Translate("BioTekGen5::readPlate"), o_errorCode, id);
          }
          errLabel_30 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            o_errorCode = 200;
            SendErrorResponseBackToServer(Translate("BioTekGen5::readPlate"), o_errorCode, id);
          }   /* end if from skip handler if no error */
        }
        HSLJsonLib::Release(objJSONFromServer);
        if (commandFromServer == "end")
        {
          SendTextMessageToServer(Translate("Good Bye!"));
          break;
        }
      }
    }
    HSLHttp::Release(objHttp);
    STAR_OEM_TOOLKIT::_ExitLibrary();
    BIOTEKGEN5::_ExitLibrary();
  } }
